PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '999'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = construal_level
  logging level = debug
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Routines
  Routine instructions
    TextComponent instruction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Instruction text.
        How to perform task.
    KeyboardComponent key_resp
      allowedKeys = 'apostrophe'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      store = nothing
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  Routine action
    CodeComponent attention_check_code
      Code Type = Auto->JS
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      Begin Routine:
        if condition_type == 'present':
            attention_check_text = 'How often do you currently engage in this action?'
        else:
            attention_check_text = 'How likely would you engage in this action five years from now?'
      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the 1, 2, 3, 4, 5 buttons
        rating_keys = ['1', '2', '3', '4', '5']
        if attention_check_keyboard.keys in rating_keys:
            attention_check_rating.markerPos = int(attention_check_keyboard.keys)
            # confirm rating by setting to current markerPos
            attention_check_rating.rating = attention_check_rating.markerPos
    TextComponent action_text
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $action
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    TextComponent attention_check
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $attention_check_text
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    SliderComponent attention_check_rating
      forceEndRoutine = False
      granularity = 0
      labels = ['not at all\noften','somewhat\noften','moderately\noften','very\noften','extremely\noften']
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      styles = ('triangleMarker',)
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent attention_check_keyboard
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine cue
    TextComponent cue_str
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $"Please imagine the next events occurring " + cue_text
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  Routine scenario_cue
    TextComponent scenario_cue_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $"Please imagine the next events occurring " + cue_text
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  Routine quitting_intention
    CodeComponent quitting_intention_code
      Code Type = Auto->JS
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      Begin Routine:
        if condition_type == 'present':
            quitting_intention_str = 'Consider the thoughts that would go through your mind if you were in this situation right now.\n\nTo what extent do these thoughts encourage or discourage you to smoke?'
        else:
            quitting_intention_str = 'Consider the thoughts that would go through your mind if you are in this situation five years from now.\n\nTo what extent do these thoughts encourage or discourage you to smoke?'
      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the 1, 2, 3, 4, 5 buttons
        rating_keys = ['1', '2', '3', '4', '5']
        if quitting_intention_keyboard.keys in rating_keys:
            quitting_intention_rating.markerPos = int(quitting_intention_keyboard.keys)
            # confirm rating by setting to current markerPos
            quitting_intention_rating.rating = quitting_intention_rating.markerPos
    TextComponent quitting_intention_text
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $quitting_intention_str
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    SliderComponent quitting_intention_rating
      forceEndRoutine = False
      granularity = 0
      labels = ['encourage\na great deal','encourage\na little','neither encourage\nnor discourage','discourage\na little','discourage\na great deal']
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      styles = ('triangleMarker',)
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent quitting_intention_keyboard
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine scenario1
    TextComponent block1_text
      durationEstim = 10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $block1_sound.status==FINISHED
      text [set every repeat] = $block1
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    SoundComponent block1_sound
      durationEstim = 10
      sound [set every repeat] = $block1_audio
      startVal [time (s)] = 0.0
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  Routine scenario2
    TextComponent block2_text
      durationEstim = 10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $block2_sound.status==FINISHED
      text [set every repeat] = $block2
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    SoundComponent block2_sound
      durationEstim = 10
      saveStartStop = False
      sound [set every repeat] = $block2_audio
      startVal [time (s)] = 0.0
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  Routine scenario3
    TextComponent block3_text
      durationEstim = 10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $block3_sound.status==FINISHED
      text [set every repeat] = $block3
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    SoundComponent block3_sound
      durationEstim = 10
      sound [set every repeat] = $block3_audio
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = choose_condition.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition_type', 'present'), ('scenario_file', 'present_scenario_conditions.csv'), ('cue_text', 'Please imagine the next events occurring RIGHT NOW'), ('attention_check_text', 'How likely would you engage in this action right now?')]),
      OrderedDict([('condition_type', 'present'), ('scenario_file', 'present_scenario_conditions.csv'), ('cue_text', 'Please imagine the next events occurring RIGHT NOW'), ('attention_check_text', 'How likely would you engage in this action right now?')]),
      OrderedDict([('condition_type', 'present'), ('scenario_file', 'present_scenario_conditions.csv'), ('cue_text', 'Please imagine the next events occurring RIGHT NOW'), ('attention_check_text', 'How likely would you engage in this action right now?')]),
      OrderedDict([('condition_type', 'present'), ('scenario_file', 'present_scenario_conditions.csv'), ('cue_text', 'Please imagine the next events occurring RIGHT NOW'), ('attention_check_text', 'How likely would you engage in this action right now?')]),
      OrderedDict([('condition_type', 'future'), ('scenario_file', 'future_scenario_conditions.csv'), ('cue_text', 'Please imagine the next events occurring FIVE YEARS FROM NOW'), ('attention_check_text', 'How likely would you engage in this action five years from now?')])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
    LoopInitiator scenario_trials loopType="TrialHandler"
      Selected rows = $random(1)*15
      conditionsFile = $scenario_file
      loopType = sequential
      nReps = 1
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      LoopInitiator action_trials loopType="TrialHandler"
        Selected rows = $random(3)*47
        conditionsFile = action_conditions.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('action', 'Grocery shopping')]),
          OrderedDict([('action', 'Driving a car')]),
          OrderedDict([('action', 'Reading a book')]),
          OrderedDict([('action', 'Going on vacation')]),
          OrderedDict([('action', 'Having lunch with a friend')]),
          OrderedDict([('action', 'Buying a car')]),
          OrderedDict([('action', 'Riding in an airplane')]),
          OrderedDict([('action', 'Calling a relative')]),
          OrderedDict([('action', 'Taking a shower')]),
          OrderedDict([('action', 'Going to the gym')]),
          OrderedDict([('action', 'Getting a haircut')]),
          OrderedDict([('action', 'A job interview')]),
          OrderedDict([('action', 'Attending a wedding')]),
          OrderedDict([('action', 'Playing cards')]),
          OrderedDict([('action', 'Making dinner')]),
          OrderedDict([('action', 'Buying coffee')]),
          OrderedDict([('action', 'Writing a letter')]),
          OrderedDict([('action', 'Cashing a check')]),
          OrderedDict([('action', 'Using an ATM')]),
          OrderedDict([('action', 'Doing laundry')]),
          OrderedDict([('action', 'Cleaning your room')]),
          OrderedDict([('action', 'Washing dishes')]),
          OrderedDict([('action', 'Throwing a ball')]),
          OrderedDict([('action', 'Hosting a party')]),
          OrderedDict([('action', 'Composing an email')]),
          OrderedDict([('action', 'Attending a party')]),
          OrderedDict([('action', 'Going shopping')]),
          OrderedDict([('action', 'Sending a text')]),
          OrderedDict([('action', 'Listening to music')]),
          OrderedDict([('action', 'Reading a newspaper')]),
          OrderedDict([('action', 'Riding a bike')]),
          OrderedDict([('action', 'Going for a walk')]),
          OrderedDict([('action', 'Walking a dog')])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
        Routine cue
        Routine action
      LoopTerminator action_trials
      Routine scenario_cue
      Routine scenario1
      Routine scenario2
      Routine scenario3
      Routine quitting_intention
    LoopTerminator scenario_trials
  LoopTerminator block
